OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
Comment
  OSC conected to
   localhost:9999 for reception at Pd
   localhost:9998 for reception at NeuroCine (OF)
Comment
  Identity is only a placeholder
  to easily change signal input

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
-> Temporal filter "Delta 1-4Hz"
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.5
-> Univariate Statistics => #3
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#3.Mean -> 9999 /eeg/delta/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/delta/mean
#3.Mean -> 9998 /eeg/delta/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/delta/mean
#1 -> Temporal filter "Theta 4-8Hz" => #6
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 0.5
-> Univariate Statistics => #7
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#7.Mean -> 9999 /eeg/theta/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/theta/mean
#7.Mean -> 9998 /eeg/theta/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/theta/mean
#1 -> Temporal filter "Alpha 8-13 Hz" => #10
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Univariate Statistics => #11
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#11.Mean -> 9999 /eeg/alpha/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/alpha/mean
#11.Mean -> 9998 /eeg/alpha/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/alpha/mean
#1 -> Temporal filter "Beta 13-30Hz" => #14
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
Input - A=#6, Input - B=#14 -> Simple DSP "Valence?=beta/theta"
  Equation = B/A
-> Univariate Statistics => #16
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#16.Mean -> 9999 /eeg/valence/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/valence/mean
#16.Mean -> 9998 /eeg/valence/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/valence/mean
Input - A=#10, Input - B=#14 -> Simple DSP "Arousal=beta/alpha"
  Equation = B/A
-> Univariate Statistics => #20
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#20.Mean -> 9999 /eeg/arousal/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/arousal/mean
#20.Mean -> 9998 /eeg/arousal/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/arousal/mean
#14 -> Univariate Statistics => #23
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#23.Mean -> 9999 /eeg/beta/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/beta/mean
#23.Mean -> 9998 /eeg/beta/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/beta/mean
#1 -> Temporal filter "Gamma 30-100 Hz"
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 30
  High cut frequency (Hz) = 100
  Pass band ripple (dB) = 0.5
-> Univariate Statistics => #27
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#27.Mean -> 9999 /eeg/gamma/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/gamma/mean
#27.Mean -> 9998 /eeg/gamma/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/gamma/mean
